PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SAT
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Routines
  Routine inter_stim_time
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine inter_stim_code
    CodeComponent code
      Code Type = Auto->JS
  Routine delay
    TextComponent delay_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine signal_event
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Sustained Attention Task.

        LEFT CLICK the mouse if the signal is present.
        RIGHT CLICK the mouse if the signal is not present.

        Press SPACE to begin the experiment.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine inter_stim_time
    Routine signal_event
    Routine delay
  LoopTerminator trials
