PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = audio_narrative
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Routines
  Routine pieman_audio
    SoundComponent pieman_clip
      sound = audio_clips\pieman_original.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 423
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    PolygonComponent pieman_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 423
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  Routine unrehearsed_audio
    CodeComponent unrehearsed_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("trial_start")
        marker.send_marker("stimuli_start")
      End Routine:
        marker.send_marker("stimuli_end")
    SoundComponent unrehearsed_clip
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent unrehearsed_cross
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine pieman_instructions
    TextComponent instructions1_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the 7-minute "Pie-man" audio clip.

        Please pay attention to the story.

        Press SPACE when you are ready to begin.
    KeyboardComponent instructions1_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine unrehearsed_instructions
    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Unreheared real-life story" audio clip.

        Please pay attention to the story.

        Press SPACE when you are ready to listen to the clip.
    KeyboardComponent instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pieman_recall_details
    TextComponent pieman_details_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Pie-man" clip. You will have 3 minutes to type your response.

        Press SPACE when you are ready to begin.
    KeyboardComponent pieman_details_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine unrehearsed_recall_details
    CodeComponent unrehearsed_marker_code
      Code Type = Py
      End Routine:
        marker.send_marker("trial_end")
    TextComponent unrehearsed_details_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Unrehearsed real-life story" clip.

        Press SPACE when you are ready to continue.
    KeyboardComponent unrehearsed_details_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}")
        par_task_dir = os.path.join(par_dir, f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker(par_dir)

        # start experiment marker -----
        marker.send_marker(11, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(12, task_end_timestamp_fmt)
  Routine end_experiment_code
    CodeComponent end_exp_code
      Code Type = Py
  Routine text_input_response
    TextboxComponent participant_response
      bold = False
      editable = True
      letterHeight = 0.04
      pos = (-0.1, 0)
      size = (1.5, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine done
    TextComponent done_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        The Audio Narrative task is now complete.
Flow
  Routine initial_exp_code
  Routine pieman_instructions
  Routine pieman_audio
  Routine pieman_recall_details
  Routine text_input_response
  Routine done
