PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = affective_go_no_go
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Routines
  Routine inter_stim_interval
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine GNG_loop_code
    CodeComponent dataset_code
      Code Type = Py
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      Begin Routine:
        # increases the loop number to iterate
        # through the datasets

        loop_num += 1

        go_stims = go_csv_list[loop_num]
        GNG_stims = GNG_csv_list[loop_num]
  Routine inter_stim_time_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        import random
        stim_time = random.randint(4, 7)
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        cwd = os.getcwd()
        loop_num = -1  # increased by 1 each loop

        GNG_conditions_dir = os.path.join(cwd, "traditional_GNG_conditions")

        go_csv_list = []
        GNG_csv_list = []

        for csv_filename in os.listdir(GNG_conditions_dir):
            if "go" in csv_filename:
                go_csv_list.append(os.path.join("traditional_GNG_conditions", csv_filename))
            elif "GNG" in csv_filename:
                GNG_csv_list.append(os.path.join("traditional_GNG_conditions", csv_filename))
  Routine go_instructions
    TextComponent go_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the Go experiment.

        Triangle = Go
        Press SPACE when a Go stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent go_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GNG_instructions
    TextComponent GNG_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Go/No-Go experiment.

        Triangle = Go
        Square = No-Go

        Press SPACE when a Go stimulus appears.
        Do not press anything when a No-Go stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine go_trial
    TextComponent go_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent go_trial_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    PolygonComponent go_triangle
      fillColor = white
      opacity [set every repeat] = 1 - 1*int(go_stim)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine GNG_trial
    TextComponent GNG_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent GNG_trial_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    PolygonComponent GNG_triangle
      fillColor = white
      opacity [set every repeat] = 1 - 1*int(GNG_stim)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent GNG_square
      fillColor = white
      opacity [set every repeat] = int(GNG_stim)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine initial_exp_code
  LoopInitiator GNG_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine GNG_loop_code
    Routine go_instructions
    LoopInitiator go_block loopType="TrialHandler"
      conditionsFile = $go_stims
      loopType = random
      nReps = 1
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      Routine inter_stim_time_code
      Routine inter_stim_interval
      Routine go_trial
    LoopTerminator go_block
    Routine GNG_instructions
    LoopInitiator GNG_block loopType="TrialHandler"
      conditionsFile = $GNG_stims
      loopType = random
      nReps = 1
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      Routine inter_stim_time_code
      Routine inter_stim_interval
      Routine GNG_trial
    LoopTerminator GNG_block
  LoopTerminator GNG_loop
