PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = affective_go_no_go
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Routines
  Routine inter_stim_interval
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine inter_stim_time_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        import random
        stim_time = random.randint(4, 7)
  Routine response_interval
    TextComponent response_interval_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent subject_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        cwd = os.getcwd()

        for filename in os.listdir(cwd):
            if "n_back_task_order-" in filename:
                task_order_csv = filename

        aff_conditions_dir = os.path.join(cwd, "affective_GNG_conditions")
        trad_conditions_dir = os.path.join(cwd, "traditional_GNG_conditions")

        aff_go_csv_list = []
        aff_GNG_csv_list = []
        trad_go_csv_list = []
        trad_GNG_csv_list = []

        # create file names and paths for each condition
        for csv_filename in os.listdir(aff_conditions_dir):
            if "go" in csv_filename:
                aff_go_csv_list.append(os.path.join("affective_GNG_conditions", csv_filename))
            elif "GNG" in csv_filename:
                aff_GNG_csv_list.append(os.path.join("affective_GNG_conditions", csv_filename))
        for csv_filename in os.listdir(trad_conditions_dir):
            if "go" in csv_filename:
                trad_go_csv_list.append(os.path.join("traditional_GNG_conditions", csv_filename))
            elif "GNG" in csv_filename:
                trad_GNG_csv_list.append(os.path.join("traditional_GNG_conditions", csv_filename))
  Routine go_stimulus
    ImageComponent go_image
      image [set every repeat] = $go_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine GNG_stimulus
    ImageComponent GNG_image
      image [set every repeat] = $GNG_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine go_instructions
    TextComponent go_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Go experiment.

        Puppies = Go

        Press SPACE when a Go stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent go_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GNG_instructions
    TextComponent GNG_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Go/No-Go experiment.

        Puppies = Go
        Spiders = No-Go

        Press SPACE when a Go stimulus appears.
        Do not press anything when a No-Go stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        These are the instructions for the Go/No-Go experiment.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
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      Begin Routine:
        #TODO: finish this
        if task_order == "aff_GNG1":
            this_loop_conditions = zero_back_csv_list[0]
            text_display = [1, 0]
        elif task_order == "aff_GNG2":
            this_loop_conditions = zero_back_csv_list[1]
            text_display = [1, 0]
        elif task_order == "aff_GNG3":
            this_loop_conditions = zero_back_csv_list[2]
            text_display = [1, 0]
        elif task_order == "aff_GNG4":
            this_loop_conditions = one_back_csv_list[0]
            text_display = [1, 0]
        elif task_order == "trad_GNG1":
            this_loop_conditions = one_back_csv_list[1]
            text_display = [0, 1]
        elif task_order == "trad_GNG2":
            this_loop_conditions = one_back_csv_list[2]
            text_display = [0, 1]
        elif task_order == "trad_GNG3":
            this_loop_conditions = two_back_csv_list[0]
            text_display = [0, 1]
        elif task_order == "trad_GNG4":
            this_loop_conditions = two_back_csv_list[1]
            text_display = [0, 1]
Flow
  Routine initial_exp_code
  Routine instructions
  LoopInitiator GNG_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine main_loop_code
    Routine go_instructions
    LoopInitiator go_block loopType="TrialHandler"
      conditionsFile = $go_stims
      loopType = random
      nReps = 1
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      Routine inter_stim_time_code
      Routine inter_stim_interval
      Routine go_stimulus
      Routine response_interval
    LoopTerminator go_block
    Routine GNG_instructions
    LoopInitiator GNG_block loopType="TrialHandler"
      conditionsFile = $GNG_stims
      loopType = random
      nReps = 1
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      Routine inter_stim_time_code
      Routine inter_stim_interval
      Routine GNG_stimulus
      Routine response_interval
    LoopTerminator GNG_block
  LoopTerminator GNG_loop
