PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = affective_go_no_go
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Routines
  Routine inter_stim_interval
    CodeComponent trial_start_code
      Code Type = Py
      Begin Experiment:
        marker.send_marker("trial_start")
    PolygonComponent inter_stim_plus
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_stim_interval
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  Routine GNG_loop_code
    CodeComponent dataset_code
      Code Type = Py
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      Begin Routine:
        # increases the loop number to iterate
        # through the datasets

        loop_num += 1

        go_stims_csv_path = go_csv_list[loop_num]
        GNG_stims_csv_path = GNG_csv_list[loop_num]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        loop_num = -1  # increased by 1 each loop

        GNG_conditions_dir = os.path.join(cwd, "affective_GNG_conditions")

        go_csv_list = []
        GNG_csv_list = []

        for csv_filename in os.listdir(GNG_conditions_dir):
            if "go" in csv_filename:
                go_csv_list.append(os.path.join("affective_GNG_conditions", csv_filename))
            elif "GNG" in csv_filename:
                GNG_csv_list.append(os.path.join("affective_GNG_conditions", csv_filename))

        practice_dir = os.path.join(cwd, "practice")
        for csv_filename in os.listdir(practice_dir):
            if "loop_count" in csv_filename:
                practice_loop_path = os.path.join(practice_dir, csv_filename)
            elif "GNG_stims" in csv_filename:
                practice_csv_path = os.path.join(practice_dir, csv_filename)

        marker.send_marker("experiment_start")
  Routine go_instructions
    TextComponent go_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO experiment.

        PUPPIES = GO
        Only press SPACE when a GO stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent go_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine GNG_instructions
    TextComponent GNG_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO/NO-GO experiment.

        PUPPIES = GO
        SPIDERS = NO-GO

        Press SPACE when a GO stimulus appears.
        Do not press anything when a NO-GO stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine go_trial
    CodeComponent go_stim_start_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("stimuli_start")
      Each Frame:
        if go_resp.keys:
            if go_resp.keys == corr_key:
                marker.send_marker("correct_ans")
            else:
                marker.send_marker("incorrect_ans")
      End Routine:
        marker.send_marker("stimuli_end")

        if go_resp.keys:
            if go_resp.keys == corr_key:
                marker.send_marker("correct_ans")
            else:
                marker.send_marker("incorrect_ans")
        else:
            marker.send_marker("incorrect_ans")

        marker.send_marker("trial_end")
    KeyboardComponent go_resp
      allowedKeys = 'space'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    PolygonComponent go_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent go_image
      image [set every repeat] = $go_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine GNG_trial
    CodeComponent GNG_marker_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("stimuli_start")
      End Routine:
        marker.send_marker("stimuli_end")

        if go_resp.keys:
            if go_resp.keys == corr_key:
                marker.send_marker("correct_ans")
            else:
                marker.send_marker("incorrect_ans")
        else:
            marker.send_marker("incorrect_ans")

        marker.send_marker("trial_end")
    KeyboardComponent GNG_resp
      allowedKeys = 'space'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    PolygonComponent GNG_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent GNG_image
      image [set every repeat] = $GNG_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine initial_instructions
    TextComponent initial_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are going to see either a PUPPY or a SPIDER appear on the screen. Press the RIGHT ARROW as fast as you can when you see a PUPPY. Press the LEFT ARROW as fast as you can when you see a SPIDER.

        When the image disappears, a plus sign will appear on the screen. Stare at the plus sign until the next image appears. Remember to press the arrow keys as fast as you can without making any mistakes.

        Press SPACE to continue.
    KeyboardComponent initial_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_instructions
    TextComponent practice_instructions_text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a practice trial.

        Remember:
        Press RIGHT ARROW as soon as a PUPPY appears.
        Press LEFT ARROW as soon a SPIDER appears.

        Press SPACE to begin the practice trial.
    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_trial
    TextComponent practice_text
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Press key now!
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    PolygonComponent practice_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent practice_image
      image [set every repeat] = $GNG_stim
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_interval
    PolygonComponent practice_interval_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine finish_practice
    TextComponent finish_practice_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to complete practice and begin the trial.

        Press BACKSPACE for more practice.
    KeyboardComponent finish_practice_resp
      allowedKeys = 'space', 'backspace'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine finish_practice_code
    CodeComponent finish_prac_code
      Code Type = Py
      Begin Routine:
        if finish_practice_resp.keys == "space":
            marker.send_marker("practice_end")
            break
        elif finish_practice_resp.keys == "backspace":
            pass
  Routine practice_start_code
    CodeComponent prac_start_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_start")
  Routine post_stim_code
    CodeComponent marker_end_code
      Code Type = Py
      disabled = True
      Begin Routine:
        marker.send_marker("stimuli_end")
        marker.send_marker("trial_end")
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("block_start")
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
      Begin Routine:
        marker.send_marker("block_end")
  Routine inter_stim_match_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
Flow
  Routine initial_exp_code
  Routine initial_instructions
  Routine practice_instructions
  Routine practice_start_code
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = $practice_loop_path
    loopType = sequential
    nReps = 1
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    LoopInitiator practice_trial_loop loopType="TrialHandler"
      conditionsFile = $practice_csv_path
      loopType = sequential
      nReps = 1
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      Routine practice_interval
      Routine practice_trial
    LoopTerminator practice_trial_loop
    Routine finish_practice
    Routine finish_practice_code
  LoopTerminator practice_loop
  LoopInitiator GNG_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine GNG_loop_code
    Routine go_instructions
    Routine block_start_code
    LoopInitiator go_block loopType="TrialHandler"
      conditionsFile = $go_stims_csv_path
      loopType = sequential
      nReps = 1
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      Routine inter_stim_match_code
      Routine inter_stim_interval
      Routine go_trial
    LoopTerminator go_block
    Routine block_end_code
    Routine GNG_instructions
    Routine block_start_code
    LoopInitiator GNG_block loopType="TrialHandler"
      conditionsFile = $GNG_stims_csv_path
      loopType = sequential
      nReps = 1
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      Routine inter_stim_match_code
      Routine inter_stim_interval
      Routine GNG_trial
    LoopTerminator GNG_block
    Routine block_end_code
  LoopTerminator GNG_loop
