PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = go_no_go
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Routines
  Routine inter_stim_interval
    PolygonComponent inter_stim_plus
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_stim_interval
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  Routine GNG_loop_code
    CodeComponent dataset_code
      Code Type = Py
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      Begin Routine:
        for cond in conds_list:
            if cond == task_order:
                this_loop_conditions = os.path.join(cond_dir, cond)

        # instructions text display -----
        if "go" in task_order:
            text_display = [1, 0]
        elif "GNG" in task_order:
            text_display = [0, 1]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        start_time = datetime.now()
        start_timestamp = int(datetime.timestamp(start_time) * 1e9)
        start_time = start_time.strftime("%Y-%m-%d-%H-%M-%S-%f")

        # setup markers -----
        import os
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_task_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}", f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # task order -----
        for filename in os.listdir(par_task_dir):
            if "GNG_TO-" in filename:
                task_order_csv = os.path.join(par_task_dir, filename)

        # task conditions -----
        cond_dir = os.path.join(par_task_dir, f"{str(expName)}_conditions")
        conds_list = os.listdir(cond_dir)

        # start experiment marker -----
        marker.send_marker(21, start_timestamp)
      End Experiment:
        # end experiment marker -----
        end_time = datetime.now()
        end_timestamp = int(datetime.timestamp(end_time) * 1e9)
        marker.send_marker(22, end_timestamp)
  Routine initial_instructions
    TextComponent initial_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are going to see either a PUPPY or a SPIDER appear on the screen. Press SPACE as fast as you can when you see a PUPPY. Do not press anything when you see a SPIDER.

        When the image disappears, a plus sign will appear on the screen. Stare at the plus sign until the next image appears. Remember to press SPACE as fast as you can without making mistakes.

        Press SPACE to continue.
    KeyboardComponent initial_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_instructions
    TextComponent practice_instructions_text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a practice trial.

        Remember:
        Press RIGHT ARROW as soon as a PUPPY appears.
        Press LEFT ARROW as soon a SPIDER appears.

        Press SPACE to begin the practice trial.
    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_trial
    TextComponent practice_text
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Press key now!
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    PolygonComponent practice_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent practice_image
      image [set every repeat] = $GNG_stim
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_interval
    PolygonComponent practice_interval_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine finish_practice
    TextComponent finish_practice_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to complete practice and begin the trial.

        Press BACKSPACE for more practice.
    KeyboardComponent finish_practice_resp
      allowedKeys = 'space', 'backspace'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_start_code
    CodeComponent prac_start_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_start")
  Routine post_stim_code
    CodeComponent marker_end_code
      Code Type = Py
      disabled = True
      Begin Routine:
        marker.send_marker("stimuli_end")
        marker.send_marker("trial_end")
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
  Routine inter_stim_match_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
  Routine experiment_end_code
    CodeComponent exp_end_marker
      Code Type = Py
  Routine practice_end_code
    CodeComponent prac_end_code
      Code Type = Py
      Begin Routine:
        if finish_practice_resp.keys == "space":
            marker.send_marker("practice_end")
            break
        elif finish_practice_resp.keys == "backspace":
            pass
  Routine GNG_instructions
    TextComponent go_instructions_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO experiment.

        PUPPIES = GO
        Only press SPACE when a GO stimulus appears.

        Press SPACE when you are ready to continue.
    TextComponent no_go_instructions_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO/NO-GO experiment.

        PUPPIES = GO
        SPIDERS = NO-GO

        Press SPACE when a GO stimulus appears.
        Do not press anything when a NO-GO stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine GNG_trial
    KeyboardComponent go_resp
      allowedKeys = 'space'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    PolygonComponent go_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent go_image
      image [set every repeat] = $GNG_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent stim_code
      Code Type = Py
      Begin Routine:
        thisExp.addData("stim_begin_datetime", datetime.now().strftime("%Y-%m-%d_%H:%M:%S.%f"))
Flow
  Routine initial_exp_code
  Routine initial_instructions
  LoopInitiator GNG_loop loopType="TrialHandler"
    conditionsFile = $task_order_csv
    loopType = sequential
    nReps = 1
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    Routine GNG_loop_code
    Routine GNG_instructions
    LoopInitiator GNG_block loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine inter_stim_interval
      Routine GNG_trial
    LoopTerminator GNG_block
  LoopTerminator GNG_loop
