PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': 'practice', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = practice_go_no_go
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Routines
  Routine inter_stim_interval
    PolygonComponent inter_stim_plus
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine GNG_loop_code
    CodeComponent dataset_code
      Code Type = Py
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      Begin Routine:
        for cond in conds_list:
            if cond == task_order:
                this_loop_conditions = os.path.join(cond_dir, cond)

        # instructions text display -----
        if "go" in task_order:
            text_display = [1, 0]
        elif "GNG" in task_order:
            text_display = [0, 1]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)

        # task order -----
        for filename in os.listdir(par_task_dir):
            if "GNG_TO-" in filename:
                task_order_csv = os.path.join(par_task_dir, filename)

        # task conditions -----
        cond_dir = os.path.join(par_task_dir, f"{str(expName)}_conditions")
        conds_list = os.listdir(cond_dir)
  Routine initial_instructions
    TextComponent initial_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are going to see either a PUPPY or a SPIDER appear on the screen. Press SPACE as fast as you can when you see a PUPPY. Do not press anything when you see a SPIDER.

        When the image disappears, a plus sign will appear on the screen. Stare at the plus sign until the next image appears. Remember to press SPACE as fast as you can without making mistakes.

        Press SPACE to continue.
    KeyboardComponent initial_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        conditions_csv = os.path.join(os.getcwd(), "practice_go_no_go_conditions.csv")
  Routine practice_instructions
    TextComponent practice_instructions_text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a practice trial.

        Remember:
        Press RIGHT ARROW as soon as a PUPPY appears.
        Press LEFT ARROW as soon a SPIDER appears.

        Press SPACE to begin the practice trial.
    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine finish_practice
    TextComponent finish_practice_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to complete practice and begin the trial.

        Press BACKSPACE for more practice.
    KeyboardComponent finish_practice_resp
      allowedKeys = 'space', 'backspace'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine post_stim_code
    CodeComponent marker_end_code
      Code Type = Py
      disabled = True
      Begin Routine:
        marker.send_marker("stimuli_end")
        marker.send_marker("trial_end")
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
  Routine inter_stim_match_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
  Routine experiment_end_code
    CodeComponent exp_end_marker
      Code Type = Py
  Routine practice_end_code
    CodeComponent prac_end_code
      Code Type = Py
      Begin Routine:
        if finish_practice_resp.keys == "space":
            marker.send_marker("practice_end")
            break
        elif finish_practice_resp.keys == "backspace":
            pass
  Routine GNG_instructions
    TextComponent go_instructions_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO experiment.

        PUPPIES = GO
        Only press SPACE when a GO stimulus appears.

        Press SPACE when you are ready to continue.
    TextComponent no_go_instructions_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO/NO-GO experiment.

        PUPPIES = GO
        SPIDERS = NO-GO

        Press SPACE when a GO stimulus appears.
        Do not press anything when a NO-GO stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine practice_trial
    KeyboardComponent go_resp
      allowedKeys = 'space'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    PolygonComponent go_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent go_image
      image [set every repeat] = $go_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine initial_instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice_go_no_go_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'task_order': 'practice_go_stimuli\\puppy_1.jpg'},
      {'task_order': 'practice_no_go_stimuli\\spider_1.jpg'},
      {'task_order': 'practice_go_stimuli\\puppy_2.jpg'},
      {'task_order': 'practice_no_go_stimuli\\spider_2.jpg'},
      {'task_order': 'practice_go_stimuli\\puppy_3.jpg'},
      {'task_order': 'practice_no_go_stimuli\\spider_3.jpg'},
      {'task_order': 'practice_go_stimuli\\puppy_4.jpg'},
      {'task_order': 'practice_no_go_stimuli\\spider_4.jpg'},
      {'task_order': 'practice_go_stimuli\\puppy_5.jpg'},
      {'task_order': 'practice_no_go_stimuli\\spider_5.jpg'}]
    LoopInitiator practice_block loopType="TrialHandler"
      conditionsFile = $task_order
      loopType = sequential
      nReps = 1
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      Routine inter_stim_interval
      Routine practice_trial
    LoopTerminator practice_block
  LoopTerminator practice_loop
