PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = initial_markers
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Re-run this experiment until Kernel receives a marker.

        Press SPACE to end.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys
        import csv

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Initial_Marker
        marker = Initial_Marker()

        # start experiment marker -----
        marker.send_marker(101, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(102, task_end_timestamp_fmt)
Flow
  Routine initial_exp_code
  Routine instructions
