PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = n_back
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the N-back task.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine rest_20
    TextComponent rest_20_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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  Routine one_back_prompt
    TextComponent one_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1-back trial.

        Press SPACE if the current number matches the previous number.
  Routine trial_one_back
    TextComponent one_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent one_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine two_back_prompt
    TextComponent two_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2-back trial.

        Press SPACE if the current number matches the number two back.
  Routine trial_two_back
    TextComponent two_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent two_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        # path to conds file for this block -----
        for cond in conds_list:
            if cond == task_order:
                this_loop_conditions = os.path.join(cond_dir, cond)

        # display match number if ZB -----
        if "ZB" in task_order:
            match_num = task_order.split("-")[1].split("_")[1]
            text_display = [1, 0, 0]
        elif "OB" in task_order:
            match_num = ""
            text_display = [0, 1, 0]
        elif "TB" in task_order:
            match_num = ""
            text_display = [0, 0, 1]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}")
        par_task_dir = os.path.join(par_dir, f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker(par_dir)

        # task order -----
        for task_filename in os.listdir(par_task_dir):
            if "NB_TO-" in task_filename:
                task_order_csv = os.path.join(par_task_dir, task_filename)

        # task conditions -----
        cond_dir = os.path.join(par_task_dir, f"{str(expName)}_conditions")
        conds_list = os.listdir(cond_dir)

        # start experiment marker -----
        marker.send_marker(41, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(42, task_end_timestamp_fmt)
  Routine stim
    TextComponent stim_text
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent stim_resp
      allowedKeys = 'right', 'left'
      correctAns = $corr_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    PolygonComponent stim_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine trial_instructions
    TextComponent exp_zero_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is a 0-back trial. \n\nPress RIGHT if the number is: " + str(match_num) + "\nOtherwise, press LEFT. \n\nPress SPACE when you are ready to begin."
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    TextComponent exp_one_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a 1-back trial.

        Press RIGHT if the current number matches the previous number. Otherwise, press LEFT.

        Press SPACE when you are ready to begin.
    TextComponent exp_two_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[2]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a 2-back trial.

        Press RIGHT if the current number matches the number two back. Otherwise, press LEFT.

        Press SPACE when you are ready to begin.
    KeyboardComponent trial_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine practice_instructions
    CodeComponent practice_marker_start
      Code Type = Py
      End Routine:
        marker.send_marker("practice_start")
    TextComponent practice_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Practice instructions go here.
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    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finish_practice_code
    CodeComponent finish_prac_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_end")
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
  Routine experiment_end_code
    CodeComponent exp_end_code
      Code Type = Py
  Routine match_code
    CodeComponent stim_match_code
      Code Type = Py
      disabled = True
      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
  Routine instructions_pause
    PolygonComponent pause_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine done
    TextComponent done_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The N-Back task is now complete.
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Flow
  Routine initial_exp_code
  Routine instructions
  LoopInitiator n_back_loop loopType="TrialHandler"
    conditionsFile = $task_order_csv
    loopType = sequential
    nReps = 1
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    Routine main_loop_code
    Routine trial_instructions
    Routine instructions_pause
    LoopInitiator stim_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine stim
    LoopTerminator stim_loop
  LoopTerminator n_back_loop
  Routine done
