PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = vSAT_timer_testing
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Routines
  Routine inter_stim_code
    CodeComponent code
      Code Type = Auto->JS
  Routine delay
    TextComponent delay_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine signal_event
    PolygonComponent vSAT_square
      fillColor = white
      opacity [set every repeat] = int(match)
      pos [set every repeat] = $[x_pos, y_pos]
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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    CodeComponent stim_code
      Code Type = Py
      End Routine:
        thisExp.addData("stim_begin_datetime", datetime.now().strftime("%Y-%m-%d_%H:%M:%S.%f"))
        print("stim clock ", thisComponent.tStartRefresh)
        print("zero clock ", core.monotonicClock.getTime())
        print("initial clock ", initial_exp_codeClock.getTime())
        print("log clock ", logging.defaultClock.getTime())
        print("\n")
  Routine response_cue
    SoundComponent response_cue_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.43
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  Routine signal_response
    KeyboardComponent stim_resp
      allowedKeys = 'left','right'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.03
      storeCorrect = True
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    SoundComponent response_sound
      sound = A
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.43
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  Routine feedback
    SoundComponent feedback_sound
      sound = B
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = correct_resp
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  Routine inter_stimulus_time
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_stim_time
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        import ctypes
        # getting the library in which GetTickCount64() resides
        lib = ctypes.windll.kernel32
        # calling the function and storing the return value
        t = lib.GetTickCount64() / 1000

        print("zero clock ", core.monotonicClock.getTime(applyZero=True))
        print("abs time ", clock.getAbsTime())
        print("log clock ", logging.defaultClock.getTime())
        print("log clock abs ", logging.defaultClock.getTime(applyZero=False))
        print("test ", str(t))
        print("\n")

        from datetime import datetime
        import time

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")

        # setup markers -----
        import os
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_task_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}", f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename + '.log', level=logging.EXP)

        # task order -----
        for task_filename in os.listdir(par_task_dir):
            if "vSAT_TO-" in task_filename:
                task_order_csv = os.path.join(par_task_dir, task_filename)

        # task conditions -----
        cond_dir = os.path.join(par_task_dir, f"{str(expName)}_conditions")
        conds_list = os.listdir(cond_dir)

        # start experiment marker -----
        marker.send_marker(91, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time()
        end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(92, end_timestamp_fmt)
  Routine signal_response_code
    CodeComponent response_code
      Code Type = Py
      Begin Routine:
        if match == 1 and stim_resp.keys == "right":   # if stim and right
            correct_resp = 1
        elif match == 0 and stim_resp.keys == "left":  # if no stim and left
            correct_resp = 1
        else:                                          # if incorrect response
            correct_resp = 0
  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        for cond in conds_list:
            if cond == task_order:
                this_loop_conditions = os.path.join(cond_dir, cond)

        # instructions text display -----
        if "vSAT_stims" in task_order:
            text_display = [1, 0]
        else:  # SAT
            text_display = [0, 1]

        print("zero clock ", core.monotonicClock.getTime())
        print("initial clock ", initial_exp_codeClock.getTime())
        print("log clock ", logging.defaultClock.getTime())
        print("\n")
  Routine vSAT_loop_code
  Routine initial_instructions
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Visuospatial Sustained Attention (vSAT) Task.

        Press RIGHT as soon as you hear the tone if a stimulus appeared.
        Press LEFT as soon as you hear the tone if a stimulus did not appear.

        You will hear a second, higher pitched tone only after a correct response.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experiment_instructions
    TextComponent experiment_SAT_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a SAT trial.

        Remember, the stimulus will appear in the center of the screen.

        Press SPACE to begin.
    TextComponent experiment_vSAT_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a vSAT trial.

        Remember, the stimulus will appear in different locations on the screen.

        Press SPACE to begin.
    KeyboardComponent experiment_instructions_rep
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experiment_start
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
Flow
  Routine initial_exp_code
  Routine initial_instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = $task_order_csv
    loopType = sequential
    nReps = 1
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    Routine main_loop_code
    Routine experiment_instructions
    LoopInitiator vSAT_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine inter_stimulus_time
      Routine signal_event
      Routine signal_response
      Routine signal_response_code
      Routine feedback
    LoopTerminator vSAT_loop
  LoopTerminator main_loop
