PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = affective_go_no_go
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Routines
  Routine inter_stim_interval
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine inter_stim_time_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        import random
        stim_time = random.randint(4, 7)
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        from pathlib import Path
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        loop_num = -1  # increased by 1 each loop

        TOL_conditions_dir = os.path.join(cwd, "TOL_conditions")

        ZM_csv_list = []
        MM_csv_list = []

        for csv_filename in os.listdir(TOL_conditions_dir):
            if "ZM" in csv_filename:
                ZM_csv_list.append(os.path.join("TOL_conditions", csv_filename))
            elif "MM" in csv_filename:
                MM_csv_list.append(os.path.join("TOL_conditions", csv_filename))

        for filename in os.listdir(cwd):
            if "TOL_task_order-" in filename:
                TOL_task_order = filename

        marker.send_marker("experiment_start")
  Routine GNG_instructions
    TextComponent GNG_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the Go/No-Go experiment.

        Puppies = Go
        Spiders = No-Go

        Press SPACE when a Go stimulus appears.
        Do not press anything when a No-Go stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine go_trial
    TextComponent go_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent go_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    ImageComponent go_image
      image [set every repeat] = $go_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TOL_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
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      Begin Routine:
        if task_order == "ZM1":
            this_loop_conditions = ZM_csv_list[0]
            num_moves = "zero"
        elif task_order == "ZM2":
            this_loop_conditions = ZM_csv_list[1]
            num_moves = "zero"
        elif task_order == "ZM3":
            this_loop_conditions = ZM_csv_list[2]
            num_moves = "zero"
        elif task_order == "MM1":
            this_loop_conditions = MM_csv_list[0]
            num_moves = "two"
        elif task_order == "MM2":
            this_loop_conditions = MM_csv_list[1]
            num_moves = "two"
        elif task_order == "MM3":
            this_loop_conditions = MM_csv_list[2]
            num_moves = "two"
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On this task, you will see two boards: one at the top of the screen
        and one at the bottom. The board at the top of the screen is called
        the target board and the board at the bottom of the screen is your
        board. Each peg has a different size. The first peg can hold three
        colored balls. The second peg can hold two colored balls. The third
        peg can hold one colored ball. Your job is to decide how many
        times you need to move the colored balls, from one peg to another,
        to make your board look like the target board. You will have 7s to
        study the two boards, afterward; you will always be asked the same
        question: Can you solve this in exactly two moves? You will have
        3 s to decide your answer.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_instructions
    TextComponent multi_move_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        If the Tower of London image can be solved in exactly two moves, press SPACE.

        Press SPACE to continue.
    KeyboardComponent exp_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stim
    CodeComponent stim_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("trial_start")
        marker.send_marker("stimuli_start")
      End Routine:
        marker.send_marker("stimuli_end")

        if stim_resp.keys:
            if stim_resp.keys == corr_key:
                marker.send_marker("correct_ans")
            else:
                marker.send_marker("incorrect_ans")
        else:
            marker.send_marker("incorrect_ans")

        marker.send_marker("trial_end")
    TextComponent stim_text
      letterHeight = 0.1
      startVal [time (s)] = 7
      stopVal [duration (s)] = 3
      text = Can you solve this in exactly two moves?
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    KeyboardComponent stim_resp
      allowedKeys = 'space'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 3
      storeCorrect = True
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    ImageComponent stim_image
      image [set every repeat] = $image_stim
      size = (0.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine stim_loop_code
  Routine post_practice_instructions
    KeyboardComponent post_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent post_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember to stay as still as you can, and to keep your hand on the
        spacebar at all times. Think through each problem carefully. Be sure
        to decide yes or no as accurately as possible within the 3s time
        limit. It is more important to be accurate in your decision than to
        give your answer quickly.
  Routine practice_instructions
    CodeComponent practice_marker_start
      Code Type = Py
      End Routine:
        marker.send_marker("practice_start")
    TextComponent practice_instructions_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice instructions go here.
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    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine finish_practice_code
    CodeComponent finish_prac_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_end")
  Routine match_code
    CodeComponent stim_match_code
      Code Type = Py
      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("block_start")
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
      Begin Routine:
        marker.send_marker("block_end")
  Routine experiment_end_code
    CodeComponent exp_end_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("experiment_end")
Flow
  Routine initial_exp_code
  Routine instructions
  Routine practice_instructions
  Routine finish_practice_code
  Routine post_practice_instructions
  LoopInitiator TOL_loop loopType="TrialHandler"
    conditionsFile = $TOL_task_order
    loopType = sequential
    nReps = 1
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    Routine TOL_loop_code
    Routine trial_instructions
    Routine block_start_code
    LoopInitiator stim_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine match_code
      Routine stim
    LoopTerminator stim_loop
    Routine block_end_code
  LoopTerminator TOL_loop
  Routine experiment_end_code
