PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = tower_of_london
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Routines
  Routine inter_stim_interval
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine inter_stim_time_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        import random
        stim_time = random.randint(4, 7)
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}")
        par_task_dir = os.path.join(par_dir, f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker(par_dir)

        # task order -----
        for task_filename in os.listdir(par_task_dir):
            if "TOL_TO-" in task_filename:
                task_order_csv = os.path.join(par_task_dir, task_filename)

        # task conditions -----
        cond_dir = os.path.join(par_task_dir, f"{str(expName)}_conditions")
        conds_list = os.listdir(cond_dir)

        # start experiment marker -----
        marker.send_marker(61, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(62, task_end_timestamp_fmt)
  Routine GNG_instructions
    TextComponent GNG_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the Go/No-Go experiment.

        Puppies = Go
        Spiders = No-Go

        Press SPACE when a Go stimulus appears.
        Do not press anything when a No-Go stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine go_trial
    TextComponent go_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent go_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    ImageComponent go_image
      image [set every repeat] = $go_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TOL_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
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      Begin Routine:
        # path to conds file for this block -----
        for cond in conds_list:
            if cond == task_order:
                this_loop_conditions = os.path.join(cond_dir, cond)
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Tower of London task.

        Remember, you must decide if exactly two moves are required to create the Target Board from Your Board. Each colored ball can only be moved to an adjacent peg.

        You will have 7 seconds to study the two boards and 3 seconds to decide your answer.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial_instructions
    TextComponent multi_move_text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If the Target Board can be created from Your Board in exactly two moves, press RIGHT. Otherwise, press LEFT.

        Press SPACE to continue.
    KeyboardComponent exp_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine stim
    TextComponent stim_text
      letterHeight = 0.1
      startVal [time (s)] = 7
      stopVal [duration (s)] = 3
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      text:
        Can you solve this in exactly two moves?

        Right = YES
        Left = NO
    KeyboardComponent stim_resp
      allowedKeys = 'right', 'left'
      correctAns = $corr_key
      forceEndRoutine = False
      startVal [time (s)] = 7
      stopVal [duration (s)] = 3
      storeCorrect = True
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    ImageComponent stim_image
      image [set every repeat] = $image_stim
      size = (0.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine stim_loop_code
  Routine post_practice_instructions
    KeyboardComponent post_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent post_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember to stay as still as you can, and to keep your hand on the
        spacebar at all times. Think through each problem carefully. Be sure
        to decide yes or no as accurately as possible within the 3s time
        limit. It is more important to be accurate in your decision than to
        give your answer quickly.
  Routine practice_instructions
    CodeComponent practice_marker_start
      Code Type = Py
      End Routine:
        marker.send_marker("practice_start")
    TextComponent practice_instructions_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice instructions go here.
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    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine finish_practice_code
    CodeComponent finish_prac_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_end")
  Routine match_code
    CodeComponent stim_match_code
      Code Type = Py
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
  Routine experiment_end_code
    CodeComponent exp_end_code
      Code Type = Py
  Routine instructions_pause
    PolygonComponent pause_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine initial_exp_code
  Routine instructions
  LoopInitiator TOL_loop loopType="TrialHandler"
    conditionsFile = $task_order_csv
    loopType = sequential
    nReps = 1
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    Routine TOL_loop_code
    Routine trial_instructions
    LoopInitiator stim_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine stim
    LoopTerminator stim_loop
    Routine instructions_pause
  LoopTerminator TOL_loop
