PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = practice_vSAT
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Routines
  Routine inter_stim_code
    CodeComponent code
      Code Type = Auto->JS
  Routine delay
    TextComponent delay_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine signal_event
    PolygonComponent vSAT_square
      fillColor = white
      opacity [set every repeat] = int(match)
      pos [set every repeat] = $[x_pos, y_pos]
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine response_cue
    SoundComponent response_cue_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.43
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  Routine signal_response
    KeyboardComponent stim_resp
      allowedKeys = 'left','right'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.03
      storeCorrect = True
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    SoundComponent response_sound
      sound = A
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.43
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    PolygonComponent cross_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.03
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  Routine feedback
    SoundComponent feedback_sound
      sound = B
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = correct_resp
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    PolygonComponent cross_3
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine inter_stimulus_time
    PolygonComponent cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_stim_time
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        import os
        cwd = os.getcwd()
        practice_conds_path = os.path.join(cwd, "practice_vSAT_conditions")
        practice_conds_list = os.listdir(practice_conds_path)
      Begin Experiment:
        win.mouseVisible = False
  Routine signal_response_code
    CodeComponent response_code
      Code Type = Py
      Begin Routine:
        if match == 1 and stim_resp.keys == "right":   # if stim and right
            correct_resp = 1
        elif match == 0 and stim_resp.keys == "left":  # if no stim and left
            correct_resp = 1
        else:                                          # if incorrect response
            correct_resp = 0
  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        this_loop_conditions = os.path.join(practice_conds_path, task_order)

        if "vSAT_stims" in this_loop_conditions:
            text_display = [1, 0]
        else:
            text_display = [0, 1]
  Routine vSAT_loop_code
  Routine initial_instructions
    TextComponent instructions_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Visuospatial Sustained Attention (vSAT) Task.

        In a SAT trial, a white square stimulus may or may not briefly appear in the center of the screen followed by a tone. Press RIGHT as soon as you hear the tone if a stimulus appeared. Press LEFT as soon as you hear the tone if a stimulus did not appear.

        In a vSAT trial, a white square stimulus may or may not briefly appear in different locations on the screen followed by a tone. Press RIGHT as soon as you hear the tone if a stimulus appeared. Press LEFT as soon as you hear the tone if a stimulus did not appear.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experiment_instructions
    TextComponent experiment_SAT_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a SAT trial.

        Remember, press RIGHT after the tone if a stimulus appeared or press LEFT after the tone if a stimulus did not appear. You will hear a second, higher pitched tone only after a correct response.

        Press SPACE to begin.
    TextComponent experiment_vSAT_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a vSAT trial.

        Remember, press RIGHT after the tone if a stimulus appeared or press LEFT after the tone if a stimulus did not appear. You will hear a second, higher pitched tone only after a correct response.

        Press SPACE to begin.
    KeyboardComponent experiment_instructions_rep
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experiment_start
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
Flow
  Routine initial_exp_code
  Routine initial_instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = practice_vSAT_TO.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('task_order', 'practice_SAT_stims.csv')]),
      OrderedDict([('task_order', 'practice_vSAT_stims.csv')])]
    Routine main_loop_code
    Routine experiment_instructions
    LoopInitiator vSAT_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine inter_stimulus_time
      Routine signal_event
      Routine signal_response
      Routine signal_response_code
      Routine feedback
    LoopTerminator vSAT_loop
  LoopTerminator main_loop
