PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = video_narrative
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Routines
  Routine catchme_video
    MovieComponent catchme_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\CMIYC_clip.mov
      startVal [time (s)] = 0.0
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    CodeComponent catchme_code
      Code Type = Py
      Begin Routine:
        thisExp.addData("stim_begin_datetime", datetime.now().strftime("%Y-%m-%d_%H:%M:%S.%f"))
  Routine sherlock_video
    MovieComponent sherlock_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\sherlock_clip.mov
      startVal [time (s)] = 0.0
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    CodeComponent sherlock_code
      Code Type = Py
      Begin Routine:
        thisExp.addData("stim_begin_datetime", datetime.now().strftime("%Y-%m-%d_%H:%M:%S.%f"))
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        start_time = datetime.now()
        start_timestamp = int(datetime.timestamp(start_time) * 1e9)
        start_time = start_time.strftime("%Y-%m-%d-%H-%M-%S-%f")

        # setup markers -----
        import os
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()
      Begin Experiment:
        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_task_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}", f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # start experiment marker -----
        marker.send_marker(81, start_timestamp)
      End Experiment:
        # end experiment marker -----
        end_time = datetime.now()
        end_timestamp = int(datetime.timestamp(start_time) * 1e9)
        marker.send_marker(82, end_timestamp)
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
  Routine catchme_instructions
    TextComponent catchme_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the "Catch Me If You Can" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to watch the clip.
    KeyboardComponent catchme_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine catchme_details
    TextComponent catchme_details_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Catch Me If You Can" clip. You will have 3 minutes to type your response.

        Press SPACE when you are ready to continue.
    KeyboardComponent catchme_details_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine sherlock_instructions
    TextComponent sherlock_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the "Sherlock" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to watch the clip.
    KeyboardComponent sherlock_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine sherlock_details
    TextComponent sherlock_details_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Sherlock" clip. You will have 3 minutes to type your response.

        Press SPACE when you are ready to continue.
    KeyboardComponent sherlock_details_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine catchme_text_respone
    TextboxComponent catchme_participant_response
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine sherlock_text_response
    TextboxComponent sherlock_participant_response
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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Flow
  Routine initial_exp_code
  Routine catchme_instructions
  Routine catchme_video
  Routine catchme_details
  Routine catchme_text_respone
  Routine sherlock_instructions
  Routine sherlock_video
  Routine sherlock_details
  Routine sherlock_text_response
