PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = video_narrative_sherlock
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Routines
  Routine catchme_video
    MovieComponent catchme_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\CMIYC_clip.mov
      startVal [time (s)] = 0.0
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    CodeComponent catchme_code
      Code Type = Py
      Begin Routine:
        thisExp.addData("stim_begin_datetime", datetime.now().strftime("%Y-%m-%d_%H:%M:%S.%f"))
  Routine sherlock_video
    MovieComponent sherlock_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\sherlock_clip.mov
      startVal [time (s)] = 0.0
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    TextComponent video_start
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = start
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}")
        par_task_dir = os.path.join(par_dir, f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker(par_dir)

        # start experiment marker -----
        marker.send_marker(81, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(82, task_end_timestamp_fmt)
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
  Routine catchme_instructions
    TextComponent catchme_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the "Catch Me If You Can" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to watch the clip.
    KeyboardComponent catchme_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine catchme_details
    TextComponent catchme_details_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Catch Me If You Can" clip. You will have 3 minutes to type your response.

        Press SPACE when you are ready to continue.
    KeyboardComponent catchme_details_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine sherlock_instructions
    TextComponent sherlock_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the 5-minute "Sherlock" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to begin.
    KeyboardComponent sherlock_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine sherlock_details
    TextComponent sherlock_details_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Sherlock" clip. You will have 3 minutes to type your response.

        Press SPACE when you are ready to begin.
    KeyboardComponent sherlock_details_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine catchme_text_respone
    TextboxComponent catchme_participant_response
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine sherlock_text_response
    TextboxComponent sherlock_participant_response
      bold = False
      editable = True
      letterHeight = 0.04
      pos = (-0.1, 0)
      size = (1.5, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine done
    TextComponent done_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The Video Narrative task is now complete.
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Flow
  Routine initial_exp_code
  Routine sherlock_instructions
  Routine sherlock_video
  Routine sherlock_details
  Routine sherlock_text_response
  Routine done
